//Affine Transformation 

// Description: affine, MI, ASGD

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingInternalImagePixelType "float")
(MovingImageDimension 2)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
//(Metric "AdvancedMattesMutualInformation")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")

(ErodeMask "true" )

(NumberOfResolutions 1)

(ImagePyramidSchedule 1 1)

(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")

(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
(CompressResultImage "true")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")

//Maximum number of iterations in each resolution level:
//(MaximumNumberOfIterations 600 ) used until 28-Aug-2019
(MaximumNumberOfIterations 400 )

//Number of grey level bins in each resolution level:
//(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
//(ImageSampler "Full")
(FixedImageBSplineInterpolationOrder 3)
(UseRandomSampleRegion "true")
(SampleRegionSize 100 100)
(NumberOfSpatialSamples 10000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
//(SP_A 20.0 )

// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "float")
(ResultImageFormat "nii.gz")
